global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'


hardware:
    myfastcounter:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 1
        timetagger_channel_apd_1: 2
        timetagger_sum_channels: False

    nicard_6343:
        module.Class: 'national_instruments_x_series_tt.NationalInstrumentsXSeries'
        photon_sources:
            - '/Dev1/PFI8'
        #    - '/Dev1/PFI9'
        clock_channel: '/Dev1/Ctr0'
        default_clock_frequency: 100 # optional, in Hz
        counter_channels:
            - '/Dev1/Ctr1'
        counter_ai_channels:
            - '/Dev1/AI0'
        counter_voltage_range: [-10, 10]
        default_scanner_clock_frequency: 100 # optional, in Hz
        scanner_clock_channel: '/Dev1/Ctr2'
        pixel_clock_channel: '/Dev1/PFI6'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
            - '/Dev1/AO3'
        scanner_ai_channels:
            - '/Dev1/AI1'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        scanner_voltage_ranges:
            - [-10, 10]
            - [-10, 10]
            - [-10, 10]
            - [-10, 10]
        scanner_position_ranges:
            - [0e-6, 200e-6]
            - [0e-6, 200e-6]
            - [-100e-6, 100e-6]
            - [-10, 10]

        odmr_trigger_channel: '/Dev1/PFI7'

        gate_in_channel: '/Dev1/PFI9'
        default_samples_number: 50
        max_counts: 3e7
        read_write_timeout: 10
        counting_edge_rising: True
logic:
    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'myfastcounter'
            savelogic: 'savelogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'